# >>>> CONFIG FILE FOR penEasy >>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>
#
# CASE DESCRIPTION:
#   Sample config file adapted to the example described in the README
#   file. Before editing this file, read carefully the instructions
#   provided here after the data sections and in the README file.
#
# LAST UPDATE:
#   2015-05-26 by JS


# >>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>
# GENERAL INSTRUCTIONS
#
# * Lines starting with a '#' (in column 1) and blank lines are
#   comments. Comments are NOT allowed inside data sections.
#
# * Do not change the order in which sections appear, neither the order
#   of data fields in each section.
#
# * Each data section has a version number of the form yyyy-mm-dd that is
#   written in the corresponding section title. Should an incorrect
#   version be introduced an error message would be issued and the
#   execution halted.
#
# * Character strings (e.g. file names) are introduced in free-format
#   style, that is, leading and trailing blanks are allowed. Their
#   maximum extension (except when noted) is 80 characters and they must
#   not contain blanks. Thus, for instance, 'stainless steel' should be
#   introduced as 'stainlessSteel' or 'stainless_Steel'.
#
# * Most syntax errors can be easily identified by looking for error
#   messages or inconsistencies within the last lines of penEasy output.
#   It is always a good idea to check the output to make sure that the
#   information written after processing each section coincides with what
#   is expected from the input.


# >>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>
# INSTRUCTIONS FOR SECTION CONFIG
#
# * Details on the simulation configuration are provided with their
#   documentation (see ~/documentation/*).

[SECTION CONFIG v.2013-03-18]
 4.0e9             NUMBER OF HISTORIES (1.0e15 MAX)
 20000             ALLOTTED TIME (s) (+ FOR REAL TIME; - FOR CPU TIME)
 100.0             UPDATE INTERVAL (s)
 1  1              INITIAL RANDOM SEEDS
 -                 SEEDS FILE; MUST ENTER SEEDS=0,0 TO APPLY
 -                 RESTART FILE; MUST ENTER SEEDS=-1,-1 TO APPLY
 penEasy.dmp       OUTPUT DUMP FILE; ENTER '-' FOR 'NO DUMP'
 1200.0            INTERVAL BETWEEN DUMPS (s)
[END OF CONFIG SECTION]


# >>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>
# INSTRUCTIONS FOR SOURCE SECTIONS
#
# * Details on the features and configuration of each source model are
#   provided with their documentation (see ~/documentation/*).
#   Notice that there must be one and only one active (status ON) source model.

[SECTION SOURCE BOX ISOTROPIC GAUSS SPECTRUM v.2014-12-21]
 ON                              STATUS (ON or OFF)
 2                               PARTICLE TYPE (1=ELECTRON, 2=PHOTON, 3=POSITRON)
  SUBSECTION FOR PHOTON POLARIZATION:
 0                               ACTIVATE PHOTON POLARIZATION PHYSICS (0=NO, 1=YES)
 0.0 0.0 0.0                     STOKES PARAMETERS (UNUSED IF ACTIVATE POLARIZATION=0)
  SUBSECTION FOR PARTICLE POSITION:
 0.0  0.0  0.0                   COORDINATES (cm) OF BOX CENTER
 0.0  0.0  0.0                   BOX SIDES (cm)
 0.0  0.0                        FWHMs (cm) OF GAUSSIAN X,Y DISTRIBUTIONS
 0.0  0.0  0.0                   EULER ANGLES [OMEGA,THETA,PHI](deg) FOR BOX ROTATION Rz(PHI).Ry(THETA).Rz(OMEGA).r
 0.0  0.0  0.0                   TRANSLATION [DX,DY,DZ](cm) OF BOX CENTER POSITION
 0                               SOURCE MATERIAL (0=DON'T CARE, >0 FOR LOCAL SOURCE, <0 FOR IN-FIELD BEAM)
  SUBSECTION FOR PARTICLE DIRECTION:
 0.0  0.0  1.0                   DIRECTION VECTOR; NO NEED TO NORMALIZE
 0.0 2.57                        DIRECTION POLAR ANGLE INTERVAL [THETA0,THETA1], BOTH VALUES IN [0,180]deg
 0.0 360.0                       DIRECTION AZIMUTHAL ANGLE INTERVAL PHI0 IN [0,360)deg AND DeltaPHI IN [0,360]deg
 1                               APPLY ALSO TO DIRECTION THE ROTATION USED FOR BOX POSITION (0=NO, 1=YES)
  SUBSECTION FOR PARTICLE ENERGY:
 RQR8_100.spc                    ENERGY SPECTRUM FILE NAME; ENTER '-' TO ENTER SPECTRUM IN NEXT LINES
 0.0                             FWHM(eV) OF GAUSSIAN ENERGY DISTRIB. [NOTE FWHM=SIGMA*sqrt(8*ln(2))]
[END OF BIGS SECTION]

[SECTION SOURCE PHASE SPACE FILE v.2009-06-15]
 OFF                             STATUS (ON or OFF)
 0                               PSF FORMAT (0=STANDARD penEasy ASCII, 1=IAEA BINARY)
 particles.psf                   PSF FILENAME, REMOVE EXTENSION IF PSF FORMAT=1
 1                               SPLITTING FACTOR
 0.0  0.0  0.0                   EULER ANGLES [Rz,Ry,Rz](deg) TO ROTATE POSITION AND DIRECTION
 0.0  0.0  0.0                   TRANSLATION [DX,DY,DZ](cm) OF POSITION
 1                               VALIDATE BEFORE SIMULATION (1=YES, MAY TAKE A WHILE; 0=NO)
 0.000e0                         MAX PSF ENERGY (eV) (UNUSED IF VALIDATE=1 OR IAEA FORMAT; ADD 1023 keV FOR e+)
[END OF SPSF SECTION]


# >>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>
# INSTRUCTIONS FOR SECTION PENGEOM+PENVOX
#
# * Enter either: (i) a file name in the QUADRICS FILE field and a dash '-' in
#   the VOXELS FILE field if you want to define only a quadric geometry model;
#   (ii) a file name in the VOXELS FILE field and a dash '-' in the QUADRICS
#   FILE field if you want to define only a voxelized geometry model; or (iii)
#   both a quadrics and a voxelized file names in the corresponding fields if
#   you want to define a combination of overlapping quadrics and voxelized models.
#
# * The TRANSPARENT QUADRIC MAT and GRANULARITY field are used only if both a
#   quadric and a voxel geometries are defined. Otherwise they are irrelevant.
#
# * Details on the use and configuration of these geometry models are provided
#   in the documentation (please refer to ~/documentation/*).

[SECTION PENGEOM+PENVOX v.2009-06-15]
 oneL060.geo                     QUADRICS FILE NAME, USE '-' IF NONE
 -                               VOXELS FILE NAME, USE '-' IF NONE
 1                               TRANSPARENT QUADRIC MAT (USED ONLY IF QUAD&VOX)
 10                              GRANULARITY TO SCAN VOXELS (USED ONLY IF QUAD&VOX)
[END OF GEO SECTION]


# >>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>
# INSTRUCTIONS FOR SECTION PENELOPE
#
# * Write one line of data per defined material. Each line starts with
#   the material index (MAT#), which should be an integer starting from 1.
#   Set MAT# to zero in the last line to denote the end of the list.
#
# * Use 20 characters at most to introduce the material data file name.
#   Blanks or special characters are not allowed in file names. Thus,
#   instead of "stainless steel.mat" use "stainlessSteel.mat".
#
# * If, for a certain material, the transport parameters after the file
#   name are left empty, then they are set automatically as follows:
#     - Eabs for charged particles are set to 1% of the
#       initial source energy (E), with the limiting values of 50 eV
#       (min) and 1 MeV (max).
#     - Eabs for photons is set to 0.1% E with the limiting values of 50
#       eV and 1 MeV.
#     - C1 and C2 are both set to 0.1.
#     - WCC is set to min(Eabs(e-),1% E)
#     - WCR is set to min(Eabs(phot),0.1% E).
#     - DSMAX is set to infinity.
#
# * Do not remove the line containing the table header "MAT# FILE...".

[SECTION PENELOPE v.2009-10-01]
 MAT# FILE___(max 20 char) EABS(e-)  EABS(ph)  EABS(e+)  C1    C2    WCC      WCR      DSMAX   COMMENTS
  1   Pb.mat           100.0e3   10.00e3   100.0e3   0.1   0.1   100.0e3  10.00e3  1.0e30  material
  2   Aire.mat            100.0e3   10.00e3   100.0e3   0.1   0.1   100.0e3  10.00e3  1.0e-1  air detector
  3   Aire.mat            100.0e3   10.00e3   100.0e3   0.1   0.1   100.0e3  10.00e3  1.0e30  air enclosure
  0 (SET MAT=0 TO END LIST)
[END OF PEN SECTION]


# >>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>
# INSTRUCTIONS FOR THE TALLY SECTIONS
#
# * Details on the features and configuration of each tally are provided
#   with their documentation (see ~/documentation/*.txt).
#
# * The required RELATIVE UNCERTAINTY that is specified for each tally
#   (except for those that do not have an associated uncertainty, e.g. a
#   phase-space file) is used as a condition to stop the simulation. Only
#   when the requested relative uncertainties of *all* the tallies have
#   been attained the uncertainty condition is considered fulfilled.
#   Recall that the simulation can also be halted because the allotted
#   time or the number of histories requested have been reached. Setting
#   the RELATIVE UNCERTAINTY of all tallies to zero will prevent the
#   execution from stopping for this cause.
#
# * Note for advanced users: when a certain tally scores nothing (i.e.
#   zero) the corresponding REPORT routine reports 0% uncertainty but, at
#   the same time, it reports that the requested uncertainty has not been
#   reached, irrespective of the value introduced in the config file.
#   This is to prevent the simulation from being stopped by a deceptive
#   impression of accuracy in highly inefficient simulations, where the
#   score and its standard deviation after a short period of time can be
#   null.

[SECTION TALLY VOXEL DOSE v.2014-12-27]
 OFF                             STATUS (ON or OFF)
 0  0                            ROI MIN,MAX X-INDEX (0 0 FOR ALL VOXELS)
 0  0                            ROI MIN,MAX Y-INDEX (0 0 FOR ALL VOXELS)
 0  0                            ROI MIN,MAX Z-INDEX (0 0 FOR ALL VOXELS)
 0                               PRINT VOXELS MASS IN REPORT (1=YES,0=NO)
 1                               PRINT COORDINATES IN REPORT (1=YES,0=NO,-1=NO&BINARYFORMAT)
 0.0                             RELATIVE UNCERTAINTY (%) REQUESTED
[END OF VDD SECTION]

[SECTION TALLY SPATIAL DOSE DISTRIB v.2009-06-15]
 OFF                              STATUS (ON or OFF)
 0.0  0.0   0                    XMIN,XMAX(cm),NXBIN (0 FOR DX=infty)
 0.0  0.0   0                    YMIN,YMAX(cm),NYBIN (0 FOR DY=infty)
 0.0  7.0   40                   ZMIN,ZMAX(cm),NZBIN (0 FOR DZ=infty)
 1                               PRINT COORDINATES IN REPORT (1=YES,0=NO,-1=NO&BINARYFORMAT)
 1.0                             RELATIVE UNCERTAINTY (%) REQUESTED
[END OF SDD SECTION]

[SECTION TALLY CYLINDRICAL DOSE DISTRIB v.2009-06-15]
 OFF                             STATUS (ON or OFF)
 0.0  8.0  80                    RMIN,RMAX(cm),NRBIN (>0)
 0.0  7.0  40                    ZMIN,ZMAX(cm),NZBIN (0 FOR DZ=infty)
 1                               PRINT COORDINATES IN REPORT (1=YES,0=NO)
 0.0                             RELATIVE UNCERTAINTY (%) REQUESTED
[END OF CDD SECTION]

[SECTION TALLY SPHERICAL DOSE DISTRIB v.2009-06-15]
 OFF                             STATUS (ON or OFF)
 0.0  1.0  50                    RMIN,RMAX(cm),NRBIN (>0)
 1                               PRINT COORDINATES IN REPORT (1=YES,0=NO)
 0.0                             RELATIVE UNCERTAINTY (%) REQUESTED
[END OF SPD SECTION]

[SECTION TALLY ENERGY DEPOSITION v.2012-06-01]
 ON                              STATUS (ON or OFF)
 3                               DETECTION MATERIAL
 2.0                             RELATIVE UNCERTAINTY (%) REQUESTED
[END OF EDP SECTION]

[SECTION TALLY PULSE HEIGHT SPECTRUM v.2012-06-01]
 OFF                             STATUS (ON or OFF)
 1                               DETECTION MATERIAL
 0.0  1.0e9  100                 EMIN,EMAX(eV), No. OF E BINS
 0.0  0.0                        A(eV^2),B(eV) FOR GAUSSIAN CONVOLUTION FWHM[eV]=sqrt(A+B*E[eV])
 0.0                             RELATIVE UNCERTAINTY (%) REQUESTED
[END OF PHS SECTION]

[SECTION TALLY PIXELATED IMAGING DETECTOR v.2015-02-06]
 OFF                             STATUS (ON or OFF)
 1                               DETECTION MATERIAL
 0                               FILTER PHOTON INTERACTION (0=NOFILTER, -1=UNSCATTERED, 1=RAYLEIGH, 2=COMPTON, 3=SECONDARIES, 9=MULTISCATTERED)
 0   100                         X-PIXEL SIZE(cm), No. X-PIXELS (ENTER 0 IN EITHER FIELD FOR AUTO)
 0   100                         Y-PIXEL SIZE(cm), No. Y-PIXELS (ENTER 0 IN EITHER FIELD FOR AUTO)
 1                               DETECTION MODE (1=ENERGY INTEGRATING, 2=PHOTON COUNTING, 3=PHOTON ENERGY DISCRIMINATING aka SPECTRUM)
 1.0e3                           ENERGY DEPOSITION THRESHOLD (eV) FOR MODE=2 (IGNORED FOR OTHER MODES)
 0.0  1.0e9  100                 EMIN,EMAX(eV), No. OF E BINS FOR MODE=3 (IGNORED FOR OTHER MODES)
 0.0  0.0                        ENERGY RESOLUTION, ENTER A(eV^2),B(eV) FOR A GAUSSIAN WITH FWHM[eV]=sqrt(A+B*E[eV])
 1                               REPORT FORMAT (1=COLUMNAR, 2=MATRIX, 3=BINARY)
 0.0                             RELATIVE UNCERTAINTY (%) REQUESTED
[END OF PID SECTION]

[SECTION TALLY FLUENCE TRACK LENGTH v.2012-06-01]
 ON                              STATUS (ON or OFF)
 3                               DETECTION MATERIAL
 10.0e3  80.0e3  70              EMIN,EMAX(eV), No. OF E BINS, APPEND 'LOG' FOR A LOG SCALE
 0.0                             RELATIVE UNCERTAINTY (%) REQUESTED
[END OF FTL SECTION]

[SECTION TALLY PHASE SPACE FILE v.2009-06-15]
 OFF                             STATUS (ON or OFF)
 0                               PSF FORMAT (0=STANDARD penEasy ASCII, 1=IAEA BINARY)
 1                               DETECTION MATERIAL (MUST BE A PERFECT ABSORBENT, EABS=+infty)
 output.psf                      PSF FILENAME, REMOVE EXTENSION IF FORMAT=1
[END OF PSF SECTION]

[SECTION TALLY PARTICLE CURRENT SPECTRUM v.2009-06-15]
 OFF                             STATUS (ON or OFF)
 1                               DETECTION MATERIAL
 0.0 1.0e9   100                 EMIN,EMAX(eV), No. OF E BINS
 0.0                             RELATIVE UNCERTAINTY (%) REQUESTED
[END OF PCS SECTION]

[SECTION TALLY PARTICLE TRACK STRUCTURE v.2009-06-15]
 OFF                              STATUS (ON or OFF)
 100                             NUMBER OF HISTORIES TO DISPLAY (~100 RECOMMENDED)
[END OF PTS SECTION]


# >>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>
# INSTRUCTIONS FOR VARIANCE-REDUCTION SECTIONS
#
# * Details on the features and configuration of each VR technique are provided
#   with their documentation (see ~/documentation/*.txt).

[SECTION INTERACTION FORCING v.2009-06-15]
 OFF                             STATUS (ON or OFF)
 1.0                             DON'T APPLY BELOW THIS STATISTICAL WEIGHT
 MAT  KPAR  ICOL  FORCING  (SET MAT=-1 TO END LIST)
 -1   0     0     1.0
[END OF VRIF SECTION]

[SECTION SPLITTING v.2015-05-30]
 OFF                             STATUS (ON or OFF)
 1.0                             WGHTMIN, DO NOT SPLIT BELOW THIS STATISTICAL WEIGHT
 1                               SPLITTING MATERIAL
 1                               SPLITTING MODE (1=SIMPLE; 2=ROTATIONAL; 3=XY)
 1                               SPLITTING FACTOR, IGNORED FOR MODE=3
 0.0  0.0  0.0                   EULER ANGLES [Rz,Ry,Rz](deg), IGNORED FOR MODE=1
 0.0  0.0  0.0                   SHIFT (cm), IGNORED FOR MODE=1
 0                               SIGN OF W ('+', '-' OR '0'=BOTH), IGNORED FOR MODE=1
 0.0  360.0                      AZIMUTHAL INTERVAL PHI0 IN [0,360)deg AND DeltaPHI IN (0,360]deg, USED ONLY IF MODE=2
[END OF VRS SECTION]

[SECTION RUSSIAN ROULETTE v.2009-06-15]
 OFF                             STATUS (ON or OFF)
 1.0                             WGHTMAX, DO NOT PLAY ABOVE THIS STATISTICAL WEIGHT
 1                               RUSSIAN ROULETTE MATERIAL
 1.0                             SURVIVAL PROBABILITY
[END OF VRRR SECTION]


# >>>> END OF FILE >>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>